PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1024, 768]
  expName = gonogo
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Routines
  Routine practice
    TextComponent fix_text
      letterHeight = 50
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent sti_text
      letterHeight = 36
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $sti
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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  Routine ins2
    TextComponent ins2_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = Press ENTER to start experiment
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    KeyboardComponent key_resp_ins2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp1
    TextComponent fix1_text
      letterHeight = 50
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent sti1_text
      letterHeight = 36
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $sti
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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  Routine exp2
    TextComponent fix2_text
      letterHeight = 50
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent si2_text
      letterHeight = 36
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $sti
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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  Routine rest
    TextComponent rest_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Rest for a while
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  Routine finish
    TextComponent finish_text
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you!
    KeyboardComponent key_resp_finish
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ins1
    TextComponent ins1_text
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        If you see M, press SPACE, if see W, do nothing

        Press ENTER to start practice
    KeyboardComponent key_resp_ins1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine ins1
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = stimuli_list.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('sti', 'W'), ('ans', 'None'), ('dur', 0.5872256100942035)]),
      OrderedDict([('sti', 'M'), ('ans', 'space'), ('dur', 0.6135733333994633)]),
      OrderedDict([('sti', 'M'), ('ans', 'space'), ('dur', 0.7984243400931235)]),
      OrderedDict([('sti', 'M'), ('ans', 'space'), ('dur', 0.7199215423977909)]),
      OrderedDict([('sti', 'M'), ('ans', 'space'), ('dur', 0.5922065777193527)])]
    Routine practice
  LoopTerminator prac_trials
  Routine ins2
  LoopInitiator exp1_trials loopType="TrialHandler"
    conditionsFile = stimuli_list.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('sti', 'M'), ('ans', None)]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")])]
    Routine exp1
  LoopTerminator exp1_trials
  Routine rest
  LoopInitiator exp2_trials loopType="TrialHandler"
    conditionsFile = stimuli_list.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('sti', 'M'), ('ans', None)]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")]),
      OrderedDict([('sti', 'W'), ('ans', "space'")])]
    Routine exp2
  LoopTerminator exp2_trials
  Routine finish
